'to remove an average stimulus artifact for neurogram channels, and possibly cell channels.
'need a stimulus marker channel.
'assumes the sample rate is 5000Hz

#include "include\basic_view.s2s"     'this will bring in two globals: GVt% and GChanList%[]
#include "include\marker_code_iter.s2s"  'this will bring in startcode%[4], endcode%[4] GetNextCode(), GetLastCode(), and CountBrsts()

var stims[5000], avgdart[50000];
var stimtimeadvance, tlen%;
var smplrate;
var howmany%;

'HANDLE VIEWS
var viewtemp%;
viewtemp% := View(0);  'Save the current view
View(viewtemp%);         'restore the original view
DrawAll();
FrontView(viewtemp%);

'SELECT CHANNELS
var SnglSlctChn%[2];

'STIMULUS TRIGGER
var StimTrigChan%;
Interact("Select event channel with stimulus triggers", 65536, 0, "&O Okay");
ChanList(SnglSlctChn%, 65536);
StimTrigChan%:= SnglSlctChn%[1];

'NEUROGRAMS TO DEARTIFICATIFY
var NrvChans%[10], CellChans%[10];
var NumNrvChans%, NumCellChans%;
Interact("select all your nerve channels to DEARTIFICATIFY", 65536, 0, "&O Okay");
ChanList(NrvChans%[],65536);
NumNrvChans% := NrvChans%[0];
resize NrvChans%[NumNrvChans%+1];

Interact("select all your cell channels to DEARTIFICATIFY", 65536, 0, "&O Okay");
ChanList(CellChans%[],65536);
NumCellChans% := CellChans%[0];

CursorDelete(-1);
CursorNew();CursorNew();

'DEMARK TIMES
var startt,endt;
Interact("DRAG THE TWO CURSORS TO DELIMIT YOUR TIME????? THEN PRESS THE TINY OKAY BUTTON!!!!!", 65536, 0, "&O Okay");
startt := Cursor(1);
endt := Cursor(2);

'FIND AVERAGE ISI, TO INDEX ARRAYS WITH
var NumStims%;
var avgisi, dpavgisi%, dpstimart%, timstimart, avgstimdur, minisi, minisidp%;
smplrate := BinSize(NrvChans%[1]);
NumStims% := ChanData(StimTrigChan%,stims[],startt,endt);
ArrDiff(stims[0:NumStims%]);
avgisi := ArrSum(stims[1:NumStims%-1])/(NumStims%-1);
ArrIntgl(stims[0:NumStims%]);
dpavgisi% := XToBin(avgisi);
dpstimart% := dpavgisi%-XToBin(avgisi)*0.2;

'SET PADDINGS
var leftpadmillisec, prepaddp%, postpad, cellavgdurprcnt;
prepaddp% := 50; 

'FIND THE AVERAGE PERI STIMULUS WAVE FORM, SET LEFT PAD
var j%, outchan%, whichchan%, iscell%;
whichchan% := 0;
for j% := 1 to NumNrvChans% do
    findavgstimart(NrvChans%[j%],avgdart[],prepaddp%,dpstimart%);
    tlen% := avgdart[0];
    PrintLog(avgdart[1:tlen%]);
    outchan% := substract(NrvChans%[j%],avgdart[1:tlen%],prepaddp%,dpstimart%);
next

'FIND THE AVERAGE PERI STIMULUS WAVE FORM, SET LEFT PAD
' manually set perpaddp, and dp stimart
prepaddp% := 10;
dpstimart% := 200;
for j% := 1 to NumCellChans% do
    findcellstimart(CellChans%[j%],avgdart[],prepaddp%,dpstimart%);
    tlen% := avgdart[0];
    PrintLog(avgdart[1:tlen%]);
    outchan% := cellsubstract(CellChans%[j%],avgdart[1:tlen%],prepaddp%,dpstimart%);
next

'FUNCTIONS ARE DEFINED BELOW:
func substract(chan%,avgstimart[], prepaddp%, dplength%) 'give the time over which to avg the cell mem as prcnt(of avgisi)
    var dupchan%;
    dupchan% := MemChan(0,chan%);
    MemImport(dupchan%,chan%,0,MaxTime(chan%));

    var i%, count%;
    var tmp[dplength%], tmpstart, tmpstop, thistmplength%, avgrmp := 0, bumprmp;
    count% := 0;
    for i% := 0 to NumStims% do
        tmpstart := stims[i%]-BinToX(prepaddp%);
        tmpstop := stims[i%]+BinToX(dpstimart%-prepaddp%);
        thistmplength% := ChanData(chan%,tmp[],stims[i%]-BinToX(prepaddp%),stims[i%]+BinToX(dpstimart%-prepaddp%));
        ArrSub(tmp[0:thistmplength%],avgstimart[0:thistmplength%]);
        'zeroout the actual stimulus
        ArrConst(tmp[prepaddp%-1:0.006/smplrate],0);
        ChanWriteWave(dupchan%,tmp[],stims[i%]-BinToX(prepaddp%));
    next;
    return dupchan%
end

'FUNCTIONS ARE DEFINED BELOW:
func cellsubstract(chan%,avgstimart[], prepaddp%, dplength%) 'give the time over which to avg the cell mem as prcnt(of avgisi)
    var dupchan%;
    dupchan% := MemChan(0,chan%);
    MemImport(dupchan%,chan%,0,MaxTime(chan%));

    var i%, count%;
    var tmp[dplength%], tmpstart, tmpstop, thistmplength%, avgrmp := 0, bumprmp;
    count% := 0;
    for i% := 0 to NumStims% do
        tmpstart := stims[i%]-BinToX(prepaddp%);
        tmpstop := stims[i%]+BinToX(dpstimart%-prepaddp%);
        thistmplength% := ChanData(chan%,tmp[],stims[i%]-BinToX(prepaddp%),stims[i%]+BinToX(dpstimart%-prepaddp%));
        ArrSub(tmp[0:thistmplength%],avgstimart[0:thistmplength%]);
        ChanWriteWave(dupchan%,tmp[],stims[i%]-BinToX(prepaddp%));
    next;
    return dupchan%
end

func findavgstimart(chan%, avgart[],prepaddp%, dplength%)    
    ArrMul(avgart[],0);
    var i%, count%;
    var tmp[dplength%], sumtmp[dplength%];
    count% := 0;
    for i% := 0 to NumStims% do
        ChanData(chan%,tmp[],stims[i%]-BinToX(prepaddp%),stims[i%]+BinToX(dpstimart%-prepaddp%));
        ArrAdd(sumtmp[],tmp[]);
        count% := count% + 1;
    next;
    ArrDiv(sumtmp, count%);
    avgart[0] := dplength%;
    ArrAdd(avgart[1:],sumtmp[]);
end

func findcellstimart(chan%, avgart[],prepaddp%, dplength%)    
    ArrMul(avgart[],0);
    var i%, count%;
    var tmp[dplength%], sumtmp[dplength%-1];
    count% := 0;
    for i% := 0 to NumStims% do
    ChanData(chan%,tmp[],stims[i%]-BinToX(prepaddp%),stims[i%]+BinToX(dpstimart%-prepaddp%));
        'try differentiating
        ArrDiff(tmp[]);
        ArrAdd(sumtmp[],tmp[1:]);
        count% := count% + 1;
    next;
    ArrDiv(sumtmp, count%);
    ArrIntgl(sumtmp[]);
    avgart[0] := dplength%;
    ArrAdd(avgart[1:],sumtmp[]);
end

proc setchantitle(inchan%, outchan%, appendstring$)
    var tmpchantit$;
    tmpchantit$ := ChanTitle$(inchan%);
    tmpchantit$ := Print$("%s_%s",Left$(tmpchantit$,5),appendstring$);
    ChanTitle$(outchan%,tmpchantit$);
end
